 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "HSLLabwareStateLib.hsl" }
 namespace _Method { #include "HSLObjLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLErrLib.hsl" }
 namespace _Method { #include "InhecoMTEC\\HSLMTecLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLArrLib.hsl" }
 namespace _Method { #include "HSLReportLib.hsl" }
#include "Dispense.res"
variable var_worksheet_name;
variable file1_TargetLabwareID;
variable file1_SourcePosID;
variable loopCounter13;
variable file1_Number;
variable file1_TargetPosID;
variable file1_SourceLabwareID;
variable file1_Volume;
file file1;
variable arr_Volumes[];
variable arr_ChannelPattern[];
variable var_worklist_path;
variable var_channel_count;
variable var_source_seq_length;
variable var_counter;
variable var_target_seq_length;
variable loopCounter1;
variable var_liquidClass;
variable var_increment;
variable var_channel_pattern;
variable var_remaining;
variable var_volume_pos;
variable loopCounter2;
variable arr_current_volumes[];
variable file1_Command;
variable arr_Command[];
variable file1_ChannelPattern;
variable var_washing_current_pos;
variable var_washing_end_pos;
variable var_counter_minus;
variable var_arr_Volumes_length;
global device ML_STAR ("Dispense.lay", "ML_STAR", hslTrue);
global device HxFan ("Dispense.lay", "HxFan", hslTrue);
variable hhs1;
variable hhs2;
variable loopCounter3;
dialog customDialog_1;
dialog dialogHandle_2;
variable var_protocol_choice;
variable var_dialog_return;
variable var_MaxLength;
variable pathinput1;
variable var_worksheet_name2;
variable var_settings_mix_worklistfile;
variable Set_var_name;
variable Set_var_value;
file Sett_file;
variable arr_name[];
variable arr_set_data[];
variable loopCounter7;
variable Set_var_lq;
variable Set_var_mc;
variable Set_var_mv;
variable Set_var_lf;
variable Set_var_cld;
variable Set_var_sd;
dialog customDialog_3;
variable loopCounter8;
variable var_dialog_return2;
variable var_pathinput_custom;
file Sett_file2;
dialog dialogHandle_4;
variable var_cld_main;
variable var_liquidclass_main;
variable var_mixing_cycle_main;
variable var_sub_depth_main;
variable var_mixing_volume_main;
variable var_save_path;
variable var_liquid_following_main;
file file2;
variable var_cld_main1;
variable var_mixing_volume_main1;
variable var_liquidclass_main1;
variable var_mixing_cycle_main1;
variable var_sub_depth_main1;
variable var_liquid_following_main1;
variable loopCounter11;
variable var_txt_path;
dialog customDialog_5;
variable loopCounter100;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    var_settings_mix_worklistfile = Translate("");
    var_txt_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\_Settings_prev.txt");
    var_liquidclass_main = Translate("");
    var_cld_main = 0;
    var_sub_depth_main = 0;
    var_liquid_following_main = 0;
    var_mixing_cycle_main = 0;
    var_mixing_volume_main = 0;
    var_MaxLength = 1000;
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_On(ML_STAR);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    Sett_file.AddField("Liquid_class", Set_var_lq, hslString, 255);
    Sett_file.AddField("CLD_Sensitivity", Set_var_cld, hslString, 255);
    Sett_file.AddField("Submerge_depth", Set_var_sd, hslString, 255);
    Sett_file.AddField("Liquid_following", Set_var_lf, hslString, 255);
    Sett_file.AddField("Mixing_Cycle", Set_var_mc, hslString, 255);
    Sett_file.AddField("Mixing_Volume", Set_var_mv, hslString, 255);
    Sett_file.SetDelimiter(";");
    if( 0 == Sett_file.Open(var_txt_path, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_txt_path, "HxMetEdCompCmd");
    }
    if( 0 == Sett_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    var_liquidclass_main = Set_var_lq;
    var_cld_main = Set_var_cld;
    var_sub_depth_main = Set_var_sd;
    var_liquid_following_main = Set_var_lf;
    var_mixing_cycle_main = Set_var_mc;
    var_mixing_volume_main = Set_var_mv;
    if(0){
      {
        for(loopCounter7 = 0; loopCounter7 < 1;)
        {
          loopCounter7 = loopCounter7 + 1;
          arr_name.AddAsLast(Set_var_name);
          arr_set_data.AddAsLast(Set_var_value);
        }
      }
    }
    if( 0 != Sett_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sett_file.RemoveFields();
    {
      for(loopCounter3 = 0; loopCounter3 < 10;)
      {
        loopCounter3 = loopCounter3 + 1;
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", var_protocol_choice );
        customDialog_1.SetCustomDialogProperty( "textBlock3.Text", var_cld_main );
        customDialog_1.SetCustomDialogProperty( "textBlock6.Text", var_sub_depth_main );
        customDialog_1.SetCustomDialogProperty( "textBlock7.Text", var_liquid_following_main );
        customDialog_1.SetCustomDialogProperty( "textBlock8.Text", var_liquidclass_main );
        customDialog_1.SetCustomDialogProperty( "textBlock9.Text", var_mixing_cycle_main );
        customDialog_1.SetCustomDialogProperty( "textBlock10.Text", var_mixing_volume_main );
        customDialog_1.ShowCustomDialog();
        var_dialog_return = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        var_protocol_choice = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        pathinput1 = customDialog_1.GetCustomDialogProperty( "pathinput.Path" );
        if (var_dialog_return == 3)
        {
          break;
        }
        if (var_dialog_return == 6)
        {
          {
            for(loopCounter100 = 0; loopCounter100 < 10;)
            {
              loopCounter100 = loopCounter100 + 1;
              customDialog_5.InitCustomDialog("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");
              customDialog_5.SetCustomDialogProperty( "numeric2.Value", var_cld_main );
              customDialog_5.SetCustomDialogProperty( "numeric3.Value", var_liquid_following_main );
              customDialog_5.SetCustomDialogProperty( "numeric4.Value", var_mixing_volume_main );
              customDialog_5.SetCustomDialogProperty( "numeric5.Value", var_sub_depth_main );
              customDialog_5.SetCustomDialogProperty( "numeric6.Value", var_mixing_cycle_main );
              customDialog_5.SetCustomDialogProperty( "textBox1.Text", var_liquidclass_main );
              customDialog_5.ShowCustomDialog();
              var_dialog_return2 = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
              var_cld_main = customDialog_5.GetCustomDialogProperty( "numeric2.Value" );
              var_liquid_following_main = customDialog_5.GetCustomDialogProperty( "numeric3.Value" );
              var_mixing_volume_main = customDialog_5.GetCustomDialogProperty( "numeric4.Value" );
              var_sub_depth_main = customDialog_5.GetCustomDialogProperty( "numeric5.Value" );
              var_mixing_cycle_main = customDialog_5.GetCustomDialogProperty( "numeric6.Value" );
              var_liquidclass_main = customDialog_5.GetCustomDialogProperty( "textBox1.Text" );
              if (var_dialog_return2 == 3)
              {
                break;
              }
              if (var_dialog_return2 == 1)
              {
                Sett_file.AddField("Liquid_class", Set_var_lq, hslString, 255);
                Sett_file.AddField("CLD_Sensitivity", Set_var_cld, hslString, 255);
                Sett_file.AddField("Submerge_depth", Set_var_sd, hslString, 255);
                Sett_file.AddField("Liquid_following", Set_var_lf, hslString, 255);
                Sett_file.AddField("Mixing_Cycle", Set_var_mc, hslString, 255);
                Sett_file.AddField("Mixing_Volume", Set_var_mv, hslString, 255);
                Sett_file.SetDelimiter(";");
                if( 0 == Sett_file.Open("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\_Settings_default.txt", hslRead) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\_Settings_default.txt", "HxMetEdCompCmd");
                }
                if( 0 == Sett_file.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                var_liquidclass_main = Set_var_lq;
                var_cld_main = Set_var_cld;
                var_sub_depth_main = Set_var_sd;
                var_liquid_following_main = Set_var_lf;
                var_mixing_cycle_main = Set_var_mc;
                var_mixing_volume_main = Set_var_mv;
                if( 0 != Sett_file.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                Sett_file.RemoveFields();
              }
              if (var_dialog_return2 == 4)
              {
                file2.AddField("Liquid_class", var_liquidclass_main, hslString, 255);
                file2.AddField("CLD_Sensitivity", var_cld_main, hslString, 255);
                file2.AddField("Submerge_depth", var_sub_depth_main, hslString, 255);
                file2.AddField("Liquid_following", var_liquid_following_main, hslString, 255);
                file2.AddField("Mixing_Cycle", var_mixing_cycle_main, hslString, 255);
                file2.AddField("Mixing_Volume", var_mixing_volume_main, hslString, 255);
                file2.SetDelimiter(";");
                if( 0 == file2.Open(var_txt_path, hslWrite) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_txt_path, "HxMetEdCompCmd");
                }
                {
                  for(loopCounter11 = 0; loopCounter11 < 1;)
                  {
                    loopCounter11 = loopCounter11 + 1;
                    var_liquidclass_main1 = var_liquidclass_main;
                    var_cld_main1 = var_cld_main;
                    var_sub_depth_main1 = var_sub_depth_main;
                    var_liquid_following_main1 = var_liquid_following_main;
                    var_mixing_cycle_main1 = var_mixing_cycle_main;
                    var_mixing_volume_main1 = var_mixing_volume_main;
                    if( 0 == file2.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                  }
                }
                if( 0 != file2.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                file2.RemoveFields();
              }
            }
          }
        }
        if (var_dialog_return == 1)
        {
          if(0){
            {
              for(loopCounter8 = 0; loopCounter8 < 10;)
              {
                loopCounter8 = loopCounter8 + 1;
                customDialog_3.InitCustomDialog("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");
                customDialog_3.SetCustomDialogProperty( "numeric2.Value", var_cld_main );
                customDialog_3.SetCustomDialogProperty( "numeric3.Value", var_liquid_following_main );
                customDialog_3.SetCustomDialogProperty( "numeric4.Value", var_mixing_volume_main );
                customDialog_3.SetCustomDialogProperty( "numeric5.Value", var_sub_depth_main );
                customDialog_3.SetCustomDialogProperty( "numeric6.Value", var_mixing_cycle_main );
                customDialog_3.SetCustomDialogProperty( "textBox1.Text", var_liquidclass_main );
                customDialog_3.ShowCustomDialog();
                var_dialog_return2 = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
                var_pathinput_custom = customDialog_3.GetCustomDialogProperty( "path1.Path" );
                var_save_path = customDialog_3.GetCustomDialogProperty( "path2.Path" );
                var_cld_main = customDialog_3.GetCustomDialogProperty( "numeric2.Value" );
                var_liquid_following_main = customDialog_3.GetCustomDialogProperty( "numeric3.Value" );
                var_mixing_volume_main = customDialog_3.GetCustomDialogProperty( "numeric4.Value" );
                var_sub_depth_main = customDialog_3.GetCustomDialogProperty( "numeric5.Value" );
                var_mixing_cycle_main = customDialog_3.GetCustomDialogProperty( "numeric6.Value" );
                var_liquidclass_main = customDialog_3.GetCustomDialogProperty( "textBox1.Text" );
                if (var_dialog_return2 == 3)
                {
                  break;
                }
                if (var_dialog_return2 == 1)
                {
                  var_worksheet_name = Translate("Settings$");
                  Sett_file.SetExtendedProperties( "IMEX=1");
                  Sett_file.AddField("Liquid_class", Set_var_lq, hslString, 255);
                  Sett_file.AddField("CLD_Sensitivity", Set_var_cld, hslInteger);
                  Sett_file.AddField("Submerge_depth", Set_var_sd, hslInteger);
                  Sett_file.AddField("Liquid_following", Set_var_lf, hslInteger);
                  Sett_file.AddField("Mixing_Cycle", Set_var_mc, hslInteger);
                  Sett_file.AddField("Mixing_Volume", Set_var_mv, hslInteger);
                  if( 0 == Sett_file.Open(var_worklist_path + " " + var_worksheet_name, hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_worklist_path, "HxMetEdCompCmd");
                  }
                  if( 0 == Sett_file.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  var_liquidclass_main = Set_var_lq;
                  var_cld_main = Set_var_cld;
                  var_sub_depth_main = Set_var_sd;
                  var_liquid_following_main = Set_var_lf;
                  var_mixing_cycle_main = Set_var_mc;
                  var_mixing_volume_main = Set_var_mv;
                  {
                    for(loopCounter7 = 0; loopCounter7 < 1;)
                    {
                      loopCounter7 = loopCounter7 + 1;
                      arr_name.AddAsLast(Set_var_name);
                      arr_set_data.AddAsLast(Set_var_value);
                    }
                  }
                  if( 0 != Sett_file.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  Sett_file.RemoveFields();
                }
                if (var_dialog_return2 == 2)
                {
                  var_worksheet_name = Translate("Settings$");
                  Sett_file2.SetExtendedProperties( "IMEX=1");
                  Sett_file2.AddField("Liquid_class", Set_var_lq, hslString, 255);
                  Sett_file2.AddField("CLD_Sensitivity", Set_var_cld, hslInteger);
                  Sett_file2.AddField("Submerge_depth", Set_var_sd, hslInteger);
                  Sett_file2.AddField("Liquid_following", Set_var_lf, hslInteger);
                  Sett_file2.AddField("Mixing_Cycle", Set_var_mc, hslInteger);
                  Sett_file2.AddField("Mixing_Volume", Set_var_mv, hslInteger);
                  if( 0 == Sett_file2.Open(var_pathinput_custom + " " + var_worksheet_name, hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_pathinput_custom, "HxMetEdCompCmd");
                  }
                  Sett_file2.AddField("Liquid_class", Set_var_lq, hslString, 255);
                  Sett_file2.AddField("CLD_Sensitivity", Set_var_cld, hslString, 255);
                  Sett_file2.AddField("Submerge_depth", Set_var_sd, hslString, 255);
                  Sett_file2.AddField("Liquid_following", Set_var_lf, hslString, 255);
                  Sett_file2.AddField("Mixing_Cycle", Set_var_mc, hslString, 255);
                  Sett_file2.AddField("Mixing_Volume", Set_var_mv, hslString, 255);
                  Sett_file2.SetDelimiter(";");
                  if( 0 == Sett_file2.Open(var_pathinput_custom, hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_pathinput_custom, "HxMetEdCompCmd");
                  }
                  if( 0 == Sett_file2.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  var_liquidclass_main = Set_var_lq;
                  var_cld_main = Set_var_cld;
                  var_sub_depth_main = Set_var_sd;
                  var_liquid_following_main = Set_var_lf;
                  var_mixing_cycle_main = Set_var_mc;
                  var_mixing_volume_main = Set_var_mv;
                  {
                    for(loopCounter7 = 0; loopCounter7 < 1;)
                    {
                      loopCounter7 = loopCounter7 + 1;
                      arr_name.AddAsLast(Set_var_name);
                      arr_set_data.AddAsLast(Set_var_value);
                    }
                  }
                  if( 0 != Sett_file2.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  Sett_file2.RemoveFields();
                }
                if (var_dialog_return2 == 4)
                {
                  var_worksheet_name = Translate("Settings$");
                  file2.AddField("Liquid_class", var_liquidclass_main, hslString, 255);
                  file2.AddField("CLD_Sensitivity", var_cld_main, hslString, 255);
                  file2.AddField("Submerge_depth", var_sub_depth_main, hslString, 255);
                  file2.AddField("Liquid_following", var_liquid_following_main, hslString, 255);
                  file2.AddField("Mixing_Cycle", var_mixing_cycle_main, hslString, 255);
                  file2.AddField("Mixing_Volume", var_mixing_volume_main, hslString, 255);
                  file2.SetDelimiter(";");
                  if( 0 == file2.Open(var_save_path, hslWrite) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_save_path, "HxMetEdCompCmd");
                  }
                  {
                    for(loopCounter11 = 0; loopCounter11 < 1;)
                    {
                      loopCounter11 = loopCounter11 + 1;
                      var_liquidclass_main1 = var_liquidclass_main;
                      var_cld_main1 = var_cld_main;
                      var_sub_depth_main1 = var_sub_depth_main;
                      var_liquid_following_main1 = var_liquid_following_main;
                      var_mixing_cycle_main1 = var_mixing_cycle_main;
                      var_mixing_volume_main1 = var_mixing_volume_main;
                      if( 0 == file2.WriteRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                    }
                  }
                  if( 0 != file2.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file2.RemoveFields();
                }
                if (var_dialog_return2 == 6)
                {
                  dialogHandle_4.SetOutput(Translate("Liquid class:"), "\n", var_liquidclass_main, "\n", Translate("CLD Sensitivity:"), "\n", var_cld_main, "\n", Translate("Submerge depth:"), "\n", var_sub_depth_main, "\n", Translate("Liquid following:"), "\n", var_liquid_following_main, "\n", Translate("Mixing cycle:"), "\n", var_mixing_cycle_main, "\n", Translate("Mixing volume:"), "\n", var_mixing_volume_main, "\n");
                  dialogHandle_4.ShowOutput(Translate("Settings"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                }
              }
            }
          }
          if (var_protocol_choice == 1)
          {
            PTL::SetLoadingStateEx(ML_STAR, ML_STAR.Tip_Dispence_300_ST, "RecoveryOptionContinue", hslTrue, 0);
            PTL::SetLoadingStateEx(ML_STAR, ML_STAR.Tip_Dispence_300_ST, "RecoveryOptionExclude", hslTrue, 1);
            PTL::SetLoadingStateEx(ML_STAR, ML_STAR.Tip_Dispence_300_ST, "RecoveryOptionDefault", 0, 1);
            PTL::SetLoadingStateEx(ML_STAR, ML_STAR.Tip_Dispence_300_ST, "KitLotCheckEnabled", hslFalse, 2);
            if(0){
              var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Methods_Cikk_Experiments_1_20240918.xls");
              var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Methods_Cikk_Test.xls");
              var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Settings.xls");
            }
            var_worksheet_name = Translate("Mix$");
            if(0){
              var_worksheet_name2 = Translate("Data$");
            }
            Mix(pathinput1, var_worksheet_name, var_MaxLength, var_liquidclass_main, var_cld_main, var_sub_depth_main, var_liquid_following_main, var_mixing_cycle_main, var_mixing_volume_main);
            if(0){
              abort;
            }
          }
          if (var_protocol_choice == 2)
          {
            var_worksheet_name = Translate("Dispence_96$");
            Dispense(pathinput1, var_worksheet_name, var_liquidclass_main, var_cld_main, var_sub_depth_main, var_liquid_following_main, var_mixing_cycle_main, var_mixing_volume_main);
            if(0){
              var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Methods_Cikk_Experiments_1_20240918.xls");
              var_worksheet_name = Translate("Dispence_96$");
              HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
              HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_Off(ML_STAR);
              var_channel_count = 4;
              var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Worklist.xls");
              var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\\20240724_elrendezes_TERV_V3.xls");
              var_worksheet_name = Translate("Protocol$");
              var_worksheet_name = Translate("Sheet3$");
              var_worksheet_name = Translate("Protocol_20_Strains$");
              var_worksheet_name = Translate("c2$");
              var_liquidClass = Translate("Csaba_Dispence_Tip_50ulFilter_Medium_DispenseJet_Empty");
              var_liquidClass = Translate("Csaba_Dispence_Tip_300ulFilter_Medium_DispenseJet_Empty");
              arr_Volumes.SetSize(0);
              arr_Command.SetSize(0);
              arr_ChannelPattern.SetSize(0);
              SeqRemoveAll(ML_STAR.Current_Source_Seq);
              SeqRemoveAll(ML_STAR.Current_Target_Seq);
              file1.AddField("Command", file1_Command, hslString, 255);
              file1.AddField("ChannelPattern", file1_ChannelPattern, hslString, 255);
              file1.AddField("Number", file1_Number, hslInteger);
              file1.AddField("SourceLabwareID", file1_SourceLabwareID, hslString, 255);
              file1.AddField("SourcePosID", file1_SourcePosID, hslString, 255);
              file1.AddField("TargetLabwareID", file1_TargetLabwareID, hslString, 255);
              file1.AddField("TargetPosID", file1_TargetPosID, hslString, 255);
              file1.AddField("Volume", file1_Volume, hslFloat);
              if( 0 == file1.Open(var_worklist_path + " " + var_worksheet_name, hslRead) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_worklist_path, "HxMetEdCompCmd");
              }
              {
                loopCounter13 = 0;
                while (
                   (file1.Eof() == 0)
                )
                {
                  loopCounter13 = loopCounter13 + 1;
                  if( 0 == file1.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  SeqAdd(ML_STAR.Current_Source_Seq, file1_SourceLabwareID, file1_SourcePosID);
                  SeqAdd(ML_STAR.Current_Target_Seq, file1_TargetLabwareID, file1_TargetPosID);
                  arr_Command.AddAsLast(file1_Command);
                  arr_ChannelPattern.AddAsLast(file1_ChannelPattern);
                  arr_Volumes.AddAsLast(file1_Volume);
                }
              }
              if( 0 != file1.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              file1.RemoveFields();
              var_source_seq_length = SeqGetMax(ML_STAR.Current_Source_Seq);
              var_target_seq_length = SeqGetMax(ML_STAR.Current_Target_Seq);
              if (var_source_seq_length != var_target_seq_length)
              {
                dialogHandle_2.SetOutput(Translate("Target and Source sequences have to have the same length!"));
                dialogHandle_2.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                abort;
              }
              var_counter = 1;
              var_remaining = 0;
              var_remaining = 0;
              ML_STAR.Current_Source_Seq.SetCurrentPosition(1);
              ML_STAR.Current_Target_Seq.SetCurrentPosition(1);
              ML_STAR.Wash_Station_24Well_Hypo.SetCurrentPosition(1);
              PTL::ResetLoadingStateAndSequences();
              PTL::SetLoadingState("UserResponseTime", hslInfinite);
              PTL::SetLoadingState("ErrorHandling", 3);
              PTL::SetLoadingState("CalibrateCarrierChannel", -1);
              PTL::SetLoadingSize(1);
              PTL::SetLoadingSequence(0, ML_STAR.Tip_50ul_with_filter, 1, -10, hslTrue, hslTrue, "50ulTipWithFilter");
              if( 0 == PTL::Load(ML_STAR, hslTrue) )
              {
                    PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
              }
              PTL::GetLoadingSequence(0, ML_STAR.Tip_50ul_with_filter);
              ML_STAR.Current_Source_Seq.SetCurrentPosition(1);
              {
                loopCounter1 = 0;
                while (var_source_seq_length > var_counter)
                {
                  loopCounter1 = loopCounter1 + 1;
                  var_remaining = var_source_seq_length - var_counter;
                  MECC::TraceComment(Translate("Preparation step"));
                  var_channel_pattern=arr_ChannelPattern.GetAt(1-1);
                  if (var_channel_pattern >= "1111")
                  {
                    var_increment = 4;
                  }
                  if (var_channel_pattern == "1110")
                  {
                    var_increment = 3;
                  }
                  if (var_channel_pattern == "1100")
                  {
                    var_increment = 2;
                  }
                  if (var_channel_pattern == "1000")
                  {
                    var_channel_pattern = Translate("1000");
                    var_increment = 1;
                  }
                  arr_current_volumes.SetSize(0);
                  {
                    for(loopCounter2 = 0; loopCounter2 < var_channel_count;)
                    {
                      loopCounter2 = loopCounter2 + 1;
                      if (loopCounter2 <= var_increment)
                      {
                        var_arr_Volumes_length=arr_Volumes.GetSize();
                        var_counter_minus = var_counter - 1;
                        var_volume_pos = var_counter_minus + loopCounter2;
                        arr_current_volumes.AddAsLast(arr_Volumes.ElementAt( var_volume_pos -1));
                      }
                      else
                      {
                        arr_current_volumes.AddAsLast(0);
                      }
                    }
                  }
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  {
                    	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
                  }
                  WashPipettes(ML_STAR.Wash_Station_24Well_Hypo, var_channel_pattern);
                  WashPipettes(ML_STAR.Wash_Station_24Well_Alcohol, var_channel_pattern);
                  if (arr_Command.ElementAt( var_counter -1) == "Chg")
                  {
                    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  }
                  var_counter = var_counter + var_increment;
                }
              }
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_On(ML_STAR);
              HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
            }
            abort;
          }
        }
      }
    }
  } }
