private function Dispense( variable Dis_var_path, variable Dis_var_workbook, variable var_liquidClass1, variable var_CLD, variable var_sub_dep, variable var_liq_foll, variable var_mix_cycle, variable var_mix_vol ) void ;
private function GetTemp(  ) void ;
private function Mix( variable Mix_var_path, variable Mix_var_workbook, variable Mix_var_MaxLength, variable var_liquidClass1, variable var_CLD, variable var_sub_dep, variable var_liq_foll, variable var_mix_cycle, variable var_mix_vol ) void ;
private function PlateLock( variable lockFl ) void ;
private function SetShakingParam(  ) void ;
private function Settings( variable Set_var_path ) void ;
private function Settings1( variable var_file_path ) void ;
private function StartTemp(  ) void ;
private function StopTemp(  ) void ;
private function WaitShakingEnds(  ) void ;
private function WaitTemp(  ) void ;
private function WashPipettes( sequence & WashPipettes_sequence, variable WashPipettes_channel_pattern ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function WashPipettes( sequence & WashPipettes_sequence, variable WashPipettes_channel_pattern ) void {
  private dialog dialogHandle_1;
  var_washing_end_pos = WashPipettes_sequence.GetCount();
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  if(0){
    WashPipettes_sequence.SetCurrentPosition(var_washing_current_pos);
    {
      	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
    }
  }
  var_washing_current_pos = WashPipettes_sequence.GetCurrentPosition();
  if(0){
    dialogHandle_1.SetOutput(Translate("End"), "\n", var_washing_end_pos, Translate("Curr"), "\n", var_washing_current_pos);
    dialogHandle_1.ShowOutput(Translate("First"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (var_washing_current_pos == 0)
  {
    WashPipettes_sequence.SetCurrentPosition(1);
  }
}

private function SetShakingParam(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::SetShakerParameter(hhs1, 1, 1250);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::SetShakerParameter(hhs2, 1, 1000);
  }
}

private function WaitShakingEnds(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::WaitForShaker(hhs1);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::WaitForShaker(hhs2);
  }
}

private function StopTemp(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::StopTempCtrl(hhs1);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::StopTempCtrl(hhs2);
  }
}

private function StartTemp(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::StartTempCtrl(hhs1, 35.2, 0);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::StartTempCtrl(hhs2, 35.2, 0);
  }
}

private function WaitTemp(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::WaitForTempCtrl(hhs1);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::WaitForTempCtrl(hhs2);
  }
}

private function PlateLock( variable lockFl ) void {
  private variable curChar;
  private variable initNodes;
  private variable useMlStar;
  private variable usedNode;
  private variable initNodesLength;
  private variable strIndex;
  strIndex = 0;
  useMlStar = 1;
  usedNode = 0;
  {
    for(loopCounter1 = 0; loopCounter1 < initNodesLength;)
    {
      loopCounter1 = loopCounter1 + 1;
      curChar = StrMid(initNodes, strIndex, 1);
      strIndex = strIndex + 1;
      if (strIndex == 3)
      {
        useMlStar = 0;
        usedNode = 0;
      }
      usedNode = usedNode + 1;
      if (curChar == "1")
      {
        HSLHamHeaterShaker::SetPlateLock(hhs1, lockFl);
      }
    }
  }
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::SetPlateLock(hhs1, lockFl);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::SetPlateLock(hhs2, lockFl);
  }
}

private function GetTemp(  ) void {
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private variable curTemp;
  if (hhs1 > 0)
  {
    curTemp = 0;
    HSLHamHeaterShaker::GetTemperature(hhs1, curTemp);
    dialogHandle_3.SetOutput("Shkaer on ML_STAR / USB : ", "\nCurrent temperature : ", curTemp, "\nNeeded temperature 35.2 °C ± 2.0 °C");
    dialogHandle_3.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
  }
  if (hhs2 > 0)
  {
    curTemp = 0;
    HSLHamHeaterShaker::GetTemperature(hhs2, curTemp);
    dialogHandle_2.SetOutput("Shkaer on ML_STAR / USB : ", "\nCurrent temperature : ", curTemp, "\nNeeded temperature 35.2 °C ± 2.0 °C");
    dialogHandle_2.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function Mix( variable Mix_var_path, variable Mix_var_workbook, variable Mix_var_MaxLength, variable var_liquidClass1, variable var_CLD, variable var_sub_dep, variable var_liq_foll, variable var_mix_cycle, variable var_mix_vol ) void {
  private dialog dialogHandle_4;
  private file Mix_file;
  private variable Mix_file_SourceRatio_1;
  private variable Mix_file_SourceLabwareID_1;
  private variable Mix_file_SourceLabwareID_2;
  private variable Mix_file_ChannelPattern;
  private variable Mix_file_SourcePosID_1;
  private variable Mix_file_SourcePosID_2;
  private variable Mix_file_TargetPosID;
  private variable Mix_file_Number;
  private variable Mix_file_Volume;
  private variable Mix_file_TargetLabwareID;
  private variable Mix_file_Command;
  private variable Mix_var_source_seq_length;
  private variable loopCounter4;
  private variable Mix_MaxCount;
  private variable arr_current_vol_1;
  private variable arr_current_vol_2;
  private variable arr_current_ratios[];
  private variable arr_Ratio[];
  private variable arr_current_volumes_1[];
  private variable arr_current_volumes_2[];
  private dialog dialogHandle_5;
  private variable loopCounter55;
  private variable Mix_isNumber;
  private variable MIx_isString;
  private variable Mix_isString;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  private dialog dialogHandle_9;
  private dialog dialogHandle_10;
  private variable is_num;
  dialogHandle_6.SetOutput(Translate("1. Only tested with larger worklist file for 50-50."), "\n", Translate("2. Due to venus file handle bug, the Open step has to be created anew. When copy-paste is used the file handle does not work."), "\n", Translate("3. Pipett 1 does not reach position 32."), "\n", Translate("4.FIle read has issues so maximum length is inputed manually"), "\n");
  dialogHandle_6.ShowOutput(Translate("Bugs"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  if(0){
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_Off(ML_STAR);
  }
  var_channel_count = 4;
  if(0){
    var_liquidClass = Translate("Csaba_Dispence_Tip_50ulFilter_Medium_DispenseJet_Empty");
  }
  var_liquidClass = Translate("Csaba_Dispence_Tip_300ulFilter_Medium_DispenseJet_Empty");
  if(0){
    Mix_MaxCount = 16;
  }
  arr_Volumes.SetSize(0);
  arr_Command.SetSize(0);
  arr_ChannelPattern.SetSize(0);
  arr_Ratio.SetSize(0);
  SeqRemoveAll(ML_STAR.Mix_Current_Source_Seq_1);
  SeqRemoveAll(ML_STAR.Mix_Current_Source_Seq_2);
  SeqRemoveAll(ML_STAR.Mix_Current_Target_Seq_1);
  SeqRemoveAll(ML_STAR.Mix_Current_Target_Seq_2);
  if(0){
    dialogHandle_9.SetOutput(Mix_var_workbook, "\n");
    dialogHandle_9.ShowOutput(Translate("Bugs"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  Mix_file.AddField("Command", Mix_file_Command, hslString, 255);
  Mix_file.AddField("ChannelPattern", Mix_file_ChannelPattern, hslString, 255);
  Mix_file.AddField("Number", Mix_file_Number, hslInteger);
  Mix_file.AddField("SourceLabwareID_1", Mix_file_SourceLabwareID_1, hslString, 255);
  Mix_file.AddField("SourcePosID_1", Mix_file_SourcePosID_1, hslString, 255);
  Mix_file.AddField("SourceRatio_1", Mix_file_SourceRatio_1, hslFloat);
  Mix_file.AddField("SourceLabwareID_2", Mix_file_SourceLabwareID_2, hslString, 255);
  Mix_file.AddField("SourcePosID_2", Mix_file_SourcePosID_2, hslString, 255);
  Mix_file.AddField("TargetLabwareID", Mix_file_TargetLabwareID, hslString, 255);
  Mix_file.AddField("TargetPosID", Mix_file_TargetPosID, hslString, 255);
  Mix_file.AddField("Volume", Mix_file_Volume, hslFloat);
  if( 0 == Mix_file.Open(Mix_var_path + " " + Mix_var_workbook, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Mix_var_path, "HxMetEdCompCmd");
  }
  {
    for(loopCounter55 = 0; loopCounter55 < Mix_var_MaxLength;)
    {
      loopCounter55 = loopCounter55 + 1;
      if( 0 == Mix_file.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqAdd(ML_STAR.Mix_Current_Source_Seq_1, Mix_file_SourceLabwareID_1, Mix_file_SourcePosID_1);
      SeqAdd(ML_STAR.Mix_Current_Source_Seq_2, Mix_file_SourceLabwareID_2, Mix_file_SourcePosID_2);
      SeqAdd(ML_STAR.Mix_Current_Target_Seq_1, Mix_file_TargetLabwareID, Mix_file_TargetPosID);
      SeqAdd(ML_STAR.Mix_Current_Target_Seq_2, Mix_file_TargetLabwareID, Mix_file_TargetPosID);
      if(0){
        dialogHandle_7.SetOutput(Mix_file_SourceRatio_1, Mix_file_Volume);
        dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      arr_Command.AddAsLast(Mix_file_Command);
      arr_ChannelPattern.AddAsLast(Mix_file_ChannelPattern);
      arr_Volumes.AddAsLast(Mix_file_Volume);
      arr_Ratio.AddAsLast(Mix_file_SourceRatio_1);
      Mix_isNumber = Util::IsNumber(Mix_file_SourcePosID_1);
      Mix_isString = Util::IsString(Mix_file_SourcePosID_1);
      if(0){
        dialogHandle_8.SetOutput(Mix_file_SourcePosID_1, "\n", loopCounter55, "\n", Mix_isNumber, "\n", MIx_isString, "\n");
        dialogHandle_8.ShowOutput(arr_current_vol_1, hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        dialogHandle_10.SetOutput(Mix_file_Command, "\n");
        dialogHandle_10.ShowOutput(arr_current_vol_1, hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
  }
  if( 0 != Mix_file.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Mix_file.RemoveFields();
  if(0){
    var_source_seq_length = SeqGetMax(ML_STAR.Mix_Current_Source_Seq_1);
    var_source_seq_length = SeqGetMax(ML_STAR.Mix_Current_Source_Seq_1);
    var_target_seq_length = SeqGetMax(ML_STAR.Current_Target_Seq);
    if (var_source_seq_length != var_target_seq_length)
    {
      dialogHandle_4.SetOutput(Translate("Target and Source sequences have to have the same length!"));
      dialogHandle_4.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
  }
  var_counter = 1;
  var_remaining = 0;
  ML_STAR.Mix_Current_Source_Seq_1.SetCurrentPosition(1);
  ML_STAR.Mix_Current_Source_Seq_2.SetCurrentPosition(1);
  ML_STAR.Mix_Current_Target_Seq_1.SetCurrentPosition(1);
  ML_STAR.Mix_Current_Target_Seq_2.SetCurrentPosition(1);
  if(0){
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, ML_STAR.SampleCarrier_Eppendorf, 1, -10, hslTrue, hslFalse, "");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.SampleCarrier_Eppendorf);
  }
  Mix_var_source_seq_length = SeqGetMax(ML_STAR.Mix_Current_Source_Seq_1);
  Mix_var_source_seq_length = SeqGetTotal(ML_STAR.Mix_Current_Source_Seq_1);
  {
    loopCounter4 = 0;
    while (Mix_var_source_seq_length > var_counter)
    {
      loopCounter4 = loopCounter4 + 1;
      if(0){
        dialogHandle_5.SetOutput(Translate("counter"), "\n", var_counter, "\n", Translate("Mix_var_source_seq_length"), "\n", Mix_var_source_seq_length, "\n", Translate(""), "\n", Translate(""), "\n");
        dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      MECC::TraceComment(Translate("Preparation step"));
      var_channel_pattern=arr_ChannelPattern.GetAt(1-1);
      if (var_channel_pattern >= "1111")
      {
        var_increment = 4;
      }
      if (var_channel_pattern == "1110")
      {
        var_increment = 3;
      }
      if (var_channel_pattern == "1100")
      {
        var_increment = 2;
      }
      if (var_channel_pattern == "1000")
      {
        var_channel_pattern = Translate("1000");
        var_increment = 1;
      }
      arr_current_volumes_1.SetSize(0);
      arr_current_volumes_2.SetSize(0);
      arr_current_ratios.SetSize(0);
      {
        for(loopCounter2 = 0; loopCounter2 < var_channel_count;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 <= var_increment)
          {
            if(0){
              var_arr_Volumes_length=arr_Volumes.GetSize();
            }
            var_counter_minus = var_counter - 1;
            var_volume_pos = var_counter_minus + loopCounter2;
            is_num = Util::IsNumber(arr_Volumes.ElementAt( var_volume_pos -1));
            if (is_num == 0)
            {
              break;
            }
            is_num = Util::IsNumber(arr_Ratio.ElementAt( var_volume_pos -1));
            if (is_num == 0)
            {
              break;
            }
            arr_current_vol_1 = arr_Volumes.ElementAt( var_volume_pos -1) * arr_Ratio.ElementAt( var_volume_pos -1);
            arr_current_vol_2 = arr_Volumes.ElementAt( var_volume_pos -1) - arr_current_vol_1;
            arr_current_volumes_1.AddAsLast(arr_current_vol_1);
            arr_current_volumes_2.AddAsLast(arr_current_vol_2);
          }
          else
          {
            arr_current_volumes.AddAsLast(0);
          }
        }
      }
      is_num = Util::IsNumber(arr_Volumes.ElementAt( var_volume_pos -1));
      if (is_num == 0)
      {
        break;
      }
      is_num = Util::IsNumber(arr_Ratio.ElementAt( var_volume_pos -1));
      if (is_num == 0)
      {
        break;
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if(0){
        WashPipettes(ML_STAR.Wash_Station_24Well_Hypo, var_channel_pattern);
        WashPipettes(ML_STAR.Wash_Station_24Well_Alcohol, var_channel_pattern);
      }
      if (arr_Command.ElementAt( var_counter -1) == "Chg")
      {
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if(0){
        WashPipettes(ML_STAR.Wash_Station_24Well_Hypo, var_channel_pattern);
        WashPipettes(ML_STAR.Wash_Station_24Well_Alcohol, var_channel_pattern);
      }
      if (arr_Command.ElementAt( var_counter -1) == "Chg")
      {
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      var_counter = var_counter + var_increment;
    }
  }
  if(0){
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  abort;
}

private function Settings1( variable var_file_path ) void {
  private dialog dialogHandle_11;
  private dialog dialogHandle_12;
  private dialog dialogHandle_13;
  private dialog dialogHandle_14;
  private dialog dialogHandle_15;
  private dialog dialogHandle_16;
  private dialog dialogHandle_17;
  private dialog dialogHandle_18;
  private dialog dialogHandle_19;
  private dialog dialogHandle_20;
  private dialog dialogHandle_21;
  private dialog dialogHandle_22;
  private dialog dialogHandle_23;
  private variable var_settings_local_log_path;
  private variable var_settings_local_y_minimum;
  private variable var_settings_local_origin_z;
  private variable var_settings_local_y_maximum;
  private variable var_settings_local_x_minimum;
  private variable var_settings_local_center;
  private variable var_settings_local_path;
  private variable var_settings_local_x_maximum;
  private variable var_settings_column1;
  private variable var_settings_column2;
  private variable var_settings_local_safety_margin;
  private variable var_settings_reference_labware;
  private variable var_settings_local_save;
  private variable var_settings_local_z_minimum;
  private variable var_settings_local_origin_x;
  private variable var_settings_local_z_maximum;
  private variable var_settings_reference_well;
  private variable var_settings_length;
  private variable var_settings_local_origin_y;
  private file settings_file;
  private variable arr_settings_local_names[];
  private variable arr_settings_local_values[];
  private variable arr_settings_values[];
  private variable arr_settings_names[];
  if (var_settings_local_save == 1)
  {
    arr_settings_local_names.SetSize(0);
    arr_settings_local_values.SetSize(0);
    settings_file.SetExtendedProperties( "IMEX=1");
    settings_file.AddField("Name", var_settings_column1, hslString, 255);
    settings_file.AddField("Value", var_settings_column2, hslString, 255);
    if( 0 == settings_file.Open(var_file_path + " " + "Settings$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_file_path, "HxMetEdCompCmd");
    }
    {
      loopCounter13 = 0;
      while (
         (settings_file.Eof() == 0)
      )
      {
        loopCounter13 = loopCounter13 + 1;
        if( 0 == settings_file.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arr_settings_local_names.AddAsLast(var_settings_column1);
        arr_settings_local_values.AddAsLast(var_settings_column2);
      }
    }
    if( 0 != settings_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    settings_file.RemoveFields();
    var_settings_length = 0;
    var_settings_length=arr_settings_local_names.GetSize();
    {
      for(loopCounter13 = 0; loopCounter13 < var_settings_length;)
      {
        loopCounter13 = loopCounter13 + 1;
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "settings_path")
        {
          var_settings_local_path = arr_settings_local_values.ElementAt( loopCounter13 -1);
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "log_path")
        {
          var_settings_local_log_path = arr_settings_local_values.ElementAt( loopCounter13 -1);
          if(0){
            dialogHandle_12.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "origin_x")
        {
          var_settings_local_origin_x = arr_settings_local_values.ElementAt( loopCounter13 -1);
          if(0){
            var_settings_local_origin_x = StrIVal(var_settings_local_origin_x);
          }
          var_settings_local_origin_x = StrFVal(var_settings_local_origin_x);
          if(0){
            dialogHandle_13.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "origin_y")
        {
          var_settings_local_origin_y = arr_settings_local_values.ElementAt( loopCounter13 -1);
          if(0){
            var_settings_local_origin_y = StrIVal(var_settings_local_origin_y);
          }
          var_settings_local_origin_y = StrFVal(var_settings_local_origin_y);
          if(0){
            dialogHandle_20.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "origin_z")
        {
          var_settings_local_origin_z = arr_settings_local_values.ElementAt( loopCounter13 -1);
          if(0){
            var_settings_local_origin_z = StrIVal(var_settings_local_origin_z);
          }
          var_settings_local_origin_z = StrFVal(var_settings_local_origin_z);
          if(0){
            dialogHandle_14.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "x_minimum")
        {
          var_settings_local_x_minimum = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_x_minimum = StrIVal(var_settings_local_x_minimum);
          if(0){
            dialogHandle_16.SetOutput(arr_settings_local_names.ElementAt( loopCounter13 -1), "\n", arr_settings_local_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_16.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "x_maximum")
        {
          var_settings_local_x_maximum = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_x_maximum = StrIVal(var_settings_local_x_maximum);
          if(0){
            dialogHandle_21.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "y_minimum")
        {
          var_settings_local_y_minimum = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_y_minimum = StrIVal(var_settings_local_y_minimum);
          if(0){
            dialogHandle_22.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "y_maximum")
        {
          var_settings_local_y_maximum = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_y_maximum = StrIVal(var_settings_local_y_maximum);
          if(0){
            dialogHandle_15.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "z_minimum")
        {
          var_settings_local_z_minimum = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_z_minimum = StrIVal(var_settings_local_z_minimum);
          if(0){
            dialogHandle_19.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "z_maximum")
        {
          var_settings_local_z_maximum = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_z_maximum = StrIVal(var_settings_local_z_maximum);
          if(0){
            dialogHandle_23.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_23.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "safety_margin")
        {
          var_settings_local_safety_margin = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_safety_margin = StrFVal(var_settings_local_safety_margin);
          if(0){
            dialogHandle_18.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_18.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "center")
        {
          var_settings_local_center = arr_settings_local_values.ElementAt( loopCounter13 -1);
          var_settings_local_center = StrIVal(var_settings_local_center);
          if(0){
            dialogHandle_17.SetOutput(arr_settings_names.ElementAt( loopCounter13 -1), "\n", arr_settings_values.ElementAt( loopCounter13 -1), "\n");
            dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "reference_labware")
        {
          var_settings_reference_labware = arr_settings_local_values.ElementAt( loopCounter13 -1);
        }
        if (arr_settings_local_names.ElementAt( loopCounter13 -1) == "reference_well")
        {
          var_settings_reference_well = arr_settings_local_values.ElementAt( loopCounter13 -1);
        }
      }
    }
  }
  else
  {
    abort;
    arr_settings_local_names.SetSize(0);
    arr_settings_local_values.SetSize(0);
    arr_settings_local_values.AddAsLast(var_settings_local_path);
    arr_settings_local_names.AddAsLast(Translate("settings_path"));
    arr_settings_local_names.AddAsLast(Translate("log_path"));
    arr_settings_local_values.AddAsLast(var_settings_local_log_path);
    arr_settings_local_names.AddAsLast(Translate("origin_x"));
    arr_settings_local_values.AddAsLast(var_settings_local_origin_x);
    arr_settings_local_names.AddAsLast(Translate("origin_y"));
    arr_settings_local_values.AddAsLast(var_settings_local_origin_y);
    arr_settings_local_names.AddAsLast(Translate("origin_z"));
    arr_settings_local_values.AddAsLast(var_settings_local_origin_z);
    arr_settings_local_names.AddAsLast(Translate("x_minimum"));
    arr_settings_local_values.AddAsLast(var_settings_local_x_minimum);
    arr_settings_local_names.AddAsLast(Translate("x_maximum"));
    arr_settings_local_values.AddAsLast(var_settings_local_x_maximum);
    arr_settings_local_names.AddAsLast(Translate("y_minimum"));
    arr_settings_local_values.AddAsLast(var_settings_local_y_minimum);
    arr_settings_local_names.AddAsLast(Translate("y_maximum"));
    arr_settings_local_values.AddAsLast(var_settings_local_y_maximum);
    arr_settings_local_names.AddAsLast(Translate("z_minimum"));
    arr_settings_local_values.AddAsLast(var_settings_local_z_minimum);
    arr_settings_local_names.AddAsLast(Translate("z_maximum"));
    arr_settings_local_values.AddAsLast(var_settings_local_z_maximum);
    arr_settings_local_names.AddAsLast(Translate("safety_margin"));
    arr_settings_local_values.AddAsLast(var_settings_local_safety_margin);
    arr_settings_local_names.AddAsLast(Translate("reference_labware"));
    arr_settings_local_values.AddAsLast(var_settings_reference_labware);
    arr_settings_local_names.AddAsLast(Translate("reference_well"));
    arr_settings_local_values.AddAsLast(var_settings_reference_well);
    var_settings_length=arr_settings_names.GetSize();
    settings_file.SetExtendedProperties( "IMEX=1");
    settings_file.AddField("Name", var_settings_column1, hslString, 255);
    settings_file.AddField("Value", var_settings_column2, hslString, 255);
    if( 0 == settings_file.Open("C:\\Users\\oem\\Desktop\\Pongor.Csaba\\Hamilton\\Projects\\Calibration\\Settings\\settings2.xls" + " " + "Settings$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\oem\\Desktop\\Pongor.Csaba\\Hamilton\\Projects\\Calibration\\Settings\\settings2.xls", "HxMetEdCompCmd");
    }
    {
      for(loopCounter13 = 0; loopCounter13 < var_settings_length;)
      {
        loopCounter13 = loopCounter13 + 1;
        if( 0 == settings_file.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        dialogHandle_11.SetOutput(var_settings_column1, "\n", var_settings_column2, "\n");
        dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if( 0 != settings_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    settings_file.RemoveFields();
  }
}

private function Settings( variable Set_var_path ) void {
  private variable Set_file_Liq_cl;
  private variable Set_var_workbook;
  private file Set_file;
  Set_file.AddField("Liquid_class", Set_file_Liq_cl, hslString, 255);
  if( 0 == Set_file.Open(Set_var_path + " " + Set_var_workbook, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Set_var_path, "HxMetEdCompCmd");
  }
  Set_file_Liq_cl = Translate("pls");
  if( 0 == Set_file.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != Set_file.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Set_file.RemoveFields();
}

private function Dispense( variable Dis_var_path, variable Dis_var_workbook, variable var_liquidClass1, variable var_CLD, variable var_sub_dep, variable var_liq_foll, variable var_mix_cycle, variable var_mix_vol ) void {
  private dialog dialogHandle_24;
  private variable is_num;
  if(0){
    var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Methods_Cikk_Experiments_1_20240918.xls");
    var_worksheet_name = Translate("Dispence_96$");
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_Off(ML_STAR);
  }
  var_channel_count = 4;
  if(0){
    var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\Worklist.xls");
    var_worklist_path = Translate("C:\Users\oem\Desktop\Pongor.Csaba\Hamilton\Projects\Dispense\Settings\\20240724_elrendezes_TERV_V3.xls");
    var_worksheet_name = Translate("Protocol$");
    var_worksheet_name = Translate("Sheet3$");
    var_worksheet_name = Translate("Protocol_20_Strains$");
    var_worksheet_name = Translate("c2$");
    var_liquidClass = Translate("Csaba_Dispence_Tip_50ulFilter_Medium_DispenseJet_Empty");
    var_liquidClass = Translate("Csaba_Dispence_Tip_300ulFilter_Medium_DispenseJet_Empty");
  }
  arr_Volumes.SetSize(0);
  arr_Command.SetSize(0);
  arr_ChannelPattern.SetSize(0);
  SeqRemoveAll(ML_STAR.Current_Source_Seq);
  SeqRemoveAll(ML_STAR.Current_Target_Seq);
  file1.AddField("Command", file1_Command, hslString, 255);
  file1.AddField("ChannelPattern", file1_ChannelPattern, hslString, 255);
  file1.AddField("Number", file1_Number, hslInteger);
  file1.AddField("SourceLabwareID", file1_SourceLabwareID, hslString, 255);
  file1.AddField("SourcePosID", file1_SourcePosID, hslString, 255);
  file1.AddField("TargetLabwareID", file1_TargetLabwareID, hslString, 255);
  file1.AddField("TargetPosID", file1_TargetPosID, hslString, 255);
  file1.AddField("Volume", file1_Volume, hslFloat);
  if( 0 == file1.Open(Dis_var_path + " " + Dis_var_workbook, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Dis_var_path, "HxMetEdCompCmd");
  }
  {
    loopCounter13 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter13 = loopCounter13 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqAdd(ML_STAR.Current_Source_Seq, file1_SourceLabwareID, file1_SourcePosID);
      SeqAdd(ML_STAR.Current_Target_Seq, file1_TargetLabwareID, file1_TargetPosID);
      arr_Command.AddAsLast(file1_Command);
      arr_ChannelPattern.AddAsLast(file1_ChannelPattern);
      arr_Volumes.AddAsLast(file1_Volume);
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  var_source_seq_length = SeqGetMax(ML_STAR.Current_Source_Seq);
  var_target_seq_length = SeqGetMax(ML_STAR.Current_Target_Seq);
  if (var_source_seq_length != var_target_seq_length)
  {
    dialogHandle_24.SetOutput(Translate("Target and Source sequences have to have the same length!"));
    dialogHandle_24.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  var_counter = 1;
  var_remaining = 0;
  var_remaining = 0;
  ML_STAR.Current_Source_Seq.SetCurrentPosition(1);
  ML_STAR.Current_Target_Seq.SetCurrentPosition(1);
  ML_STAR.Wash_Station_24Well_Hypo.SetCurrentPosition(1);
  if(0){
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, ML_STAR.Tip_50ul_with_filter, 1, -10, hslTrue, hslTrue, "50ulTipWithFilter");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.Tip_50ul_with_filter);
    ML_STAR.Current_Source_Seq.SetCurrentPosition(1);
  }
  {
    loopCounter1 = 0;
    while (var_source_seq_length > var_counter)
    {
      loopCounter1 = loopCounter1 + 1;
      var_remaining = var_source_seq_length - var_counter;
      MECC::TraceComment(Translate("Preparation step"));
      var_channel_pattern=arr_ChannelPattern.GetAt(1-1);
      if (var_channel_pattern >= "1111")
      {
        var_increment = 4;
      }
      if (var_channel_pattern == "1110")
      {
        var_increment = 3;
      }
      if (var_channel_pattern == "1100")
      {
        var_increment = 2;
      }
      if (var_channel_pattern == "1000")
      {
        var_channel_pattern = Translate("1000");
        var_increment = 1;
      }
      arr_current_volumes.SetSize(0);
      {
        for(loopCounter2 = 0; loopCounter2 < var_channel_count;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 <= var_increment)
          {
            if(0){
              var_arr_Volumes_length=arr_Volumes.GetSize();
            }
            var_counter_minus = var_counter - 1;
            var_volume_pos = var_counter_minus + loopCounter2;
            arr_current_volumes.AddAsLast(arr_Volumes.ElementAt( var_volume_pos -1));
            is_num = Util::IsNumber(arr_Volumes.ElementAt( var_volume_pos -1));
            if (is_num == 0)
            {
              break;
            }
          }
          else
          {
            arr_current_volumes.AddAsLast(0);
          }
        }
      }
      is_num = Util::IsNumber(arr_Volumes.ElementAt( var_volume_pos -1));
      if (is_num == 0)
      {
        break;
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if(0){
        WashPipettes(ML_STAR.Wash_Station_24Well_Hypo, var_channel_pattern);
        WashPipettes(ML_STAR.Wash_Station_24Well_Alcohol, var_channel_pattern);
      }
      if (arr_Command.ElementAt( var_counter -1) == "Chg")
      {
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      var_counter = var_counter + var_increment;
    }
  }
  if(0){
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_On(ML_STAR);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
}
