 namespace _Method { #include "Cleware USB Controller Interface\\Cleware USB Controller Interface.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
#include "colony_screening_systems_deck.res"
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLReportLib.hsl" }
 namespace _Method { #include "HSLBarcodeReader.hsl" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
 namespace _Method { #include "Cleware USB Switch\\Cleware USB Switch.hsl" }
 namespace _Method { #include "HSLObjLib.hsl" }
 namespace _Method { #include "HSLVectorDbWorklistManagement.hsl" }
 namespace _Method { #include "HSLSynLib.hsl" }
 namespace _Method { #include "Hamilton FanControl\\Hamilton FanControl.hsl" }
variable loopCounter1;
variable intSwitchCount;
variable blnSimulationMode;
variable arrIntDeviceTypes[];
variable arrIntVersions[];
variable arrIntSerialNumbers[];
variable arrIntDeviceIDs[];
sequence stamping_position[];
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
variable var_worksheet_name;
variable file1_FixHeight;
variable var_Used_Position;
variable file1_SourcePosID;
variable file1_TargetLabwareID;
variable var_LengthChannelPattern;
variable loopCounter13;
variable file1_Number;
variable file1_TargetPosID;
variable file1_SourceLabwareID;
variable testsize;
variable file1_Volume;
variable loopCounter6;
file file1;
variable arr_FixHeights[];
variable arr_SourcePosID[];
variable arr_Volumes[];
variable arr_TargetLabwareID[];
variable arr_ChannelPattern[];
variable arr_TargetPosID[];
variable arr_SourceLabwareID[];
dialog customDialog_5;
variable Dialog_dwell_time_source;
variable Dialog_dwell_time_target;
variable Cycle_semaphor;
variable loopCounter2;
variable Dialog_pos3_checkbox;
variable Dialog_pos1_checkbox;
variable var_choice;
variable var_isExit;
variable Dialog_pos2_checkbox;
variable loopCounter5;
variable Dialog_repeats_source;
variable Dialog_repeats_target;
variable Dialog_dwell_time_wash;
variable Dialog_repeats_wash;
dialog customDialog_6;
variable Dialog_drying_time;
variable time;
event empty_event;
variable Dialog_cleanliness;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
variable var_tool_up;
variable var_sonication_time_probe;
dialog dialogHandle1;
timer timer_main;
global device ML_STAR ("colony_screening_systems_deck.lay", "ML_STAR", hslTrue);
global device HxFan ("colony_screening_systems_deck.lay", "HxFan", hslTrue);
variable a;
variable sada;
variable asd;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if(0){
      PTL::ResetLoadingStateAndSequences();
      PTL::SetLoadingState("UserResponseTime", hslInfinite);
      PTL::SetLoadingState("ErrorHandling", 3);
      PTL::SetLoadingState("CalibrateCarrierChannel", -1);
      PTL::SetLoadingSize(1);
      PTL::SetLoadingSequence(0, ML_STAR.PPKE_PinTool_Source, 1, -10, hslTrue, hslFalse, "");
      if( 0 == PTL::Load(ML_STAR, hslTrue) )
      {
            PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::GetLoadingSequence(0, ML_STAR.PPKE_PinTool_Source);
      PTL::ResetUnloadingStateAndSequences();
      PTL::SetUnloadingState("UserResponseTime", hslInfinite);
      PTL::SetUnloadingState("ErrorHandling", 3);
      PTL::SetUnloadingSize(1);
      PTL::SetUnloadingSequence(0, ML_STAR.PPKE_PinTool_Source, hslFalse, "");
      if( 0 == PTL::Unload(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::GetUnloadingSequence(0, ML_STAR.PPKE_PinTool_Source);
    }
    if(0){
      HEPA_ON(4);
      HEPA_OFF();
      abort;
      var_sonication_time_probe = 10;
      Sonication(var_sonication_time_probe);
      time = 10;
      {
        	HxFan.SetComPort("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"); // SetComPort
      }
      {
        	HxFan.SetFanSpeed("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"); // SetFanSpeed
      }
      if( 0 == empty_event.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == empty_event.WaitEvent(time) )
      {
            MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
      }
      {
        	HxFan.SetFanOff("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"); // SetFanOff
      }
      {
        	HxFan.CloseComPort("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"); // CloseComPort
      }
      abort;
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      abort;
    }
    Cycle_semaphor = 1;
    Dialog_dwell_time_source = 2;
    Dialog_dwell_time_target = 2;
    Dialog_dwell_time_wash = 200;
    Dialog_drying_time = 60;
    Dialog_repeats_source = 2;
    Dialog_repeats_target = 1;
    Dialog_repeats_wash = 1;
    Dialog_pos1_checkbox = 1;
    Dialog_pos2_checkbox = 1;
    Dialog_pos3_checkbox = 1;
    Dialog_cleanliness = 0;
    var_choice = 1;
    var_tool_up = 0;
    if(0){
      abort;
    }
    {
      loopCounter2 = 0;
      while (Cycle_semaphor == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          loopCounter5 = 0;
          while (var_isExit != 2)
          {
            loopCounter5 = loopCounter5 + 1;
            var_isExit = 1;
            customDialog_6.InitCustomDialog("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");
            customDialog_6.SetCustomDialogProperty( "comboBox1.SelectedIndex", var_choice );
            customDialog_6.SetCustomDialogProperty( "Dialog_pos1_checkbox.IsChecked", Dialog_pos1_checkbox );
            customDialog_6.SetCustomDialogProperty( "Dialog_pos2_checkbox.IsChecked", Dialog_pos2_checkbox );
            customDialog_6.SetCustomDialogProperty( "Dialog_pos3_checkbox.IsChecked", Dialog_pos3_checkbox );
            customDialog_6.SetCustomDialogProperty( "Dialog_repeats_source.Value", Dialog_repeats_source );
            customDialog_6.SetCustomDialogProperty( "Dialog_dwell_time_source.Value", Dialog_dwell_time_source );
            customDialog_6.SetCustomDialogProperty( "Dialog_repeats_target.Value", Dialog_repeats_target );
            customDialog_6.SetCustomDialogProperty( "Dialog_dwell_time_target.Value", Dialog_dwell_time_target );
            customDialog_6.SetCustomDialogProperty( "numeric1.Value", Dialog_repeats_wash );
            customDialog_6.SetCustomDialogProperty( "numeric2.Value", Dialog_dwell_time_wash );
            customDialog_6.SetCustomDialogProperty( "numeric3.Value", Dialog_drying_time );
            customDialog_6.SetCustomDialogProperty( "Dialog_cleanliness.IsChecked", Dialog_cleanliness );
            customDialog_6.ShowCustomDialog();
            var_isExit = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
            var_choice = customDialog_6.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            Dialog_pos1_checkbox = customDialog_6.GetCustomDialogProperty( "Dialog_pos1_checkbox.IsChecked" );
            Dialog_pos2_checkbox = customDialog_6.GetCustomDialogProperty( "Dialog_pos2_checkbox.IsChecked" );
            Dialog_pos3_checkbox = customDialog_6.GetCustomDialogProperty( "Dialog_pos3_checkbox.IsChecked" );
            Dialog_repeats_source = customDialog_6.GetCustomDialogProperty( "Dialog_repeats_source.Value" );
            Dialog_dwell_time_source = customDialog_6.GetCustomDialogProperty( "Dialog_dwell_time_source.Value" );
            Dialog_repeats_target = customDialog_6.GetCustomDialogProperty( "Dialog_repeats_target.Value" );
            Dialog_dwell_time_target = customDialog_6.GetCustomDialogProperty( "Dialog_dwell_time_target.Value" );
            Dialog_repeats_wash = customDialog_6.GetCustomDialogProperty( "numeric1.Value" );
            Dialog_dwell_time_wash = customDialog_6.GetCustomDialogProperty( "numeric2.Value" );
            Dialog_drying_time = customDialog_6.GetCustomDialogProperty( "numeric3.Value" );
            Dialog_cleanliness = customDialog_6.GetCustomDialogProperty( "Dialog_cleanliness.IsChecked" );
            stamping_position.SetSize(0);
            var_Used_Position=stamping_position.GetSize();
            if(0){
              dialogHandle_9.SetOutput(var_Used_Position, "\n", Dialog_pos1_checkbox, "\n", Dialog_pos2_checkbox, "\n", Dialog_pos3_checkbox);
              dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }
            if (Dialog_pos1_checkbox == 1)
            {
              stamping_position.AddAsLast(ML_STAR.PPKE_PinTool_Target_1);
            }
            if (Dialog_pos2_checkbox == 1)
            {
              stamping_position.AddAsLast(ML_STAR.PPKE_PinTool_Target_2);
            }
            if (Dialog_pos3_checkbox == 1)
            {
              stamping_position.AddAsLast(ML_STAR.PPKE_PinTool_Target_3);
            }
            if (var_isExit == 2)
            {
              if (var_tool_up == 1)
              {
                Washing(Dialog_repeats_wash, Dialog_dwell_time_wash, Dialog_drying_time);
              }
              abort;
            }
            var_Used_Position=stamping_position.GetSize();
            if (var_Used_Position >= 1)
            {
              break;
            }
            if (var_isExit == 2)
            {
              abort;
            }
          }
        }
        if(0){
          dialogHandle_7.SetOutput(var_Used_Position, "\n", Dialog_pos1_checkbox, "\n", Dialog_pos2_checkbox, "\n", Dialog_pos3_checkbox, "\n", Dialog_repeats_wash, "\n", Dialog_dwell_time_wash, "\n", Dialog_repeats_source, "\n", Dialog_dwell_time_source, "\n", Dialog_repeats_target, "\n", Dialog_dwell_time_target, "\n");
          dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          dialogHandle_8.SetOutput(Dialog_cleanliness, "\n");
          dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if (Dialog_cleanliness == 1)
          {
            var_tool_up = 1;
            Cleanliness(stamping_position, Dialog_dwell_time_target);
          }
          else
          {
            Stamping(Dialog_repeats_target, stamping_position, Dialog_dwell_time_target, Dialog_repeats_source, Dialog_dwell_time_source, Dialog_repeats_wash, Dialog_dwell_time_wash, Dialog_drying_time);
            Washing(Dialog_repeats_wash, Dialog_dwell_time_wash, Dialog_drying_time);
          }
        }
        if (var_choice == 1)
        {
          if (var_tool_up == 0)
          {
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            var_tool_up = 1;
          }
          Stamping(Dialog_repeats_target, stamping_position, Dialog_dwell_time_target, Dialog_repeats_source, Dialog_dwell_time_source, Dialog_repeats_wash, Dialog_dwell_time_wash, Dialog_drying_time);
        }
        if (var_choice == 2)
        {
          if (var_tool_up == 0)
          {
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            var_tool_up = 1;
          }
          if (var_tool_up == 1)
          {
            Washing(Dialog_repeats_wash, Dialog_dwell_time_wash, Dialog_drying_time);
            var_tool_up = 0;
          }
        }
      }
    }
    if(0){
      arr_SourceLabwareID.SetSize(0);
      arr_SourcePosID.SetSize(0);
      arr_TargetLabwareID.SetSize(0);
      arr_TargetPosID.SetSize(0);
      arr_Volumes.SetSize(0);
      arr_FixHeights.SetSize(0);
      file1.AddField("Number", file1_Number, hslFloat);
      file1.AddField("SourceLabwareID", file1_SourceLabwareID, hslString, 255);
      file1.AddField("SourcePosID", file1_SourcePosID, hslString, 255);
      file1.AddField("TargetLabwareID", file1_TargetLabwareID, hslString, 255);
      file1.AddField("TargetPosID", file1_TargetPosID, hslString, 255);
      file1.AddField("Volume", file1_Volume, hslFloat);
      file1.AddField("FixHeight", file1_FixHeight, hslFloat);
      if( 0 == file1.Open("C:\\Users\\oem\\Desktop\\proba.xls" + " " + var_worksheet_name, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\oem\\Desktop\\proba.xls", "HxMetEdCompCmd");
      }
      var_LengthChannelPattern=arr_ChannelPattern.GetSize();
      dialogHandle_3.SetOutput(file1_SourceLabwareID, Translate("Ide is eljutottunk wazz"));
      dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      {
        loopCounter13 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter13 = loopCounter13 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_1.SetOutput(file1_SourceLabwareID);
          dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          arr_SourceLabwareID.AddAsLast(file1_SourceLabwareID);
          arr_SourcePosID.AddAsLast(file1_SourcePosID);
          arr_TargetLabwareID.AddAsLast(file1_TargetLabwareID);
          arr_TargetPosID.AddAsLast(file1_TargetPosID);
          arr_Volumes.AddAsLast(file1_Volume);
          arr_FixHeights.AddAsLast(file1_FixHeight);
        }
      }
      if( 0 != file1.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file1.RemoveFields();
      {
        for(loopCounter6 = 0; loopCounter6 < var_Used_Position;)
        {
          loopCounter6 = loopCounter6 + 1;
          dialogHandle_4.SetOutput(loopCounter6, "\n");
          dialogHandle_4.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
      testsize=arr_SourcePosID.GetSize();
      dialogHandle_2.SetOutput(testsize, "\n");
      dialogHandle_2.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
  } }
