private function Cleanliness( sequence & Stamping_position_array[], variable Dwell_time ) void ;
private function HEPA_25_submethod( variable time ) void ;
private function HEPA_50_submethod( variable time ) void ;
private function HEPA_75_submethod( variable time ) void ;
private function HEPA_OFF(  ) void ;
private function HEPA_ON( variable HEPA_ON_fanpower ) void ;
private function Sonication( variable sonication_time ) void ;
private function Stamping( variable Stamping_repeat, sequence & Stamping_position_array[], variable Dwell_time, variable Stamping_repeat_source, variable Dwell_time_source, variable Stamping_repeat_washing, variable Dwell_time_washing, variable Drying_time ) void ;
private function Washing( variable Stamping_repeat_washing, variable Dwell_time_washing, variable Drying_time ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function HEPA_25_submethod( variable time ) void {
  private event empty_event;
  {
    	HxFan.SetComPort("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"); // SetComPort
  }
  {
    	HxFan.SetFanSpeed("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"); // SetFanSpeed
  }
  if( 0 == empty_event.SetEvent() )
  {
        MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == empty_event.WaitEvent(time) )
  {
        MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
  }
  {
    	HxFan.SetFanOff("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"); // SetFanOff
  }
  {
    	HxFan.CloseComPort("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"); // CloseComPort
  }
}

private function HEPA_50_submethod( variable time ) void {
  private event empty_event;
  {
    	HxFan.SetComPort("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"); // SetComPort
  }
  {
    	HxFan.SetFanSpeed("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"); // SetFanSpeed
  }
  if( 0 == empty_event.SetEvent() )
  {
        MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == empty_event.WaitEvent(time) )
  {
        MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
  }
  {
    	HxFan.SetFanOff("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"); // SetFanOff
  }
  {
    	HxFan.CloseComPort("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"); // CloseComPort
  }
}

private function HEPA_75_submethod( variable time ) void {
  private event empty_event;
  {
    	HxFan.SetComPort("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"); // SetComPort
  }
  {
    	HxFan.SetFanSpeed("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"); // SetFanSpeed
  }
  if( 0 == empty_event.SetEvent() )
  {
        MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == empty_event.WaitEvent(time) )
  {
        MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
  }
  {
    	HxFan.SetFanOff("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"); // SetFanOff
  }
  {
    	HxFan.CloseComPort("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"); // CloseComPort
  }
}

private function Sonication( variable sonication_time ) void {
  private timer sonication_timer;
  private dialog dialogHandle_1;
  Cleware_USB_Controller_Interface::Initialize(blnSimulationMode, arrIntDeviceIDs, arrIntDeviceTypes, arrIntSerialNumbers, arrIntVersions);
  if(0){
    dialogHandle_1.SetOutput(arrIntDeviceIDs.ElementAt( 1 -1), arrIntDeviceTypes.ElementAt( 1 -1), arrIntSerialNumbers.ElementAt( 1 -1), arrIntVersions.ElementAt( 1 -1));
    dialogHandle_1.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  Cleware_USB_Controller_Interface::GetSwitchConfiguration(arrIntDeviceIDs.ElementAt( 1 -1), intSwitchCount);
  Cleware_USB_Controller_Interface::SetSwitch(arrIntDeviceIDs.ElementAt( 1 -1), 1, ASWGLOBAL::BOOL::ON);
  if( 0 == sonication_timer.SetTimer(sonication_time) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == sonication_timer.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Cleware_USB_Controller_Interface::SetSwitch(arrIntDeviceIDs.ElementAt( 1 -1), 1, ASWGLOBAL::BOOL::OFF);
  Cleware_USB_Controller_Interface::Terminate();
}

private function Stamping( variable Stamping_repeat, sequence & Stamping_position_array[], variable Dwell_time, variable Stamping_repeat_source, variable Dwell_time_source, variable Stamping_repeat_washing, variable Dwell_time_washing, variable Drying_time ) void {
  private variable Stamping_array_length;
  private timer Source_timer;
  private timer Target_timer;
  private sequence washing_position_arr[];
  private dialog dialogHandle_2;
  private variable Washing_array_length;
  private timer Washing_timer;
  private variable loopCounter7;
  private variable loopCounter8;
  private variable loopCounter10;
  private variable loopCounter15;
  private dialog dialogHandle_3;
  private sequence washing_rough_position_arr[];
  private variable loopCounter14;
  private variable Washing_Rough_array_length;
  private timer Dry_timer;
  Stamping_array_length=Stamping_position_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < Stamping_array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      {
        for(loopCounter7 = 0; loopCounter7 < Stamping_repeat_source;)
        {
          loopCounter7 = loopCounter7 + 1;
          ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          if( 0 == Source_timer.SetTimer(Dwell_time_source) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == Source_timer.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      {
        for(loopCounter15 = 0; loopCounter15 < Stamping_repeat;)
        {
          loopCounter15 = loopCounter15 + 1;
          ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          if( 0 == Target_timer.SetTimer(Dwell_time) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == Target_timer.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if(0){
            if (loopCounter15 == Stamping_repeat)
            {
              if( 0 == Target_timer.SetTimer(Dwell_time) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == Target_timer.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
      }
    }
  }
  ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
  if(0){
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
  if(0){
    washing_rough_position_arr.SetSize(0);
    washing_rough_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_96_Rough_Washing_1);
    washing_rough_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_96_Rough_Washing_2);
    Washing_Rough_array_length=washing_rough_position_arr.GetSize();
    dialogHandle_3.SetOutput(Translate("Length"), "\n", Stamping_array_length, "\n");
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      for(loopCounter14 = 0; loopCounter14 < Washing_Rough_array_length;)
      {
        loopCounter14 = loopCounter14 + 1;
        {
          for(loopCounter15 = 0; loopCounter15 < Stamping_repeat_washing;)
          {
            loopCounter15 = loopCounter15 + 1;
            ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
            if( 0 == Washing_timer.SetTimer(Dwell_time_washing) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == Washing_timer.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
    }
    washing_position_arr.SetSize(0);
    washing_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_Washing_3);
    washing_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_Washing_2);
    washing_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_Washing_1);
    Washing_array_length=washing_position_arr.GetSize();
    dialogHandle_2.SetOutput(Translate("Length"), "\n", Stamping_array_length, "\n");
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      for(loopCounter8 = 0; loopCounter8 < Washing_array_length;)
      {
        loopCounter8 = loopCounter8 + 1;
        {
          for(loopCounter10 = 0; loopCounter10 < Stamping_repeat_washing;)
          {
            loopCounter10 = loopCounter10 + 1;
            ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
            if( 0 == Washing_timer.SetTimer(Dwell_time_washing) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == Washing_timer.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
    }
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if( 0 == Dry_timer.SetTimer(Drying_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == Dry_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
}

private function Cleanliness( sequence & Stamping_position_array[], variable Dwell_time ) void {
  private variable Stamping_array_length;
  private timer Target_timer;
  private variable loopCounter16;
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  Stamping_array_length=Stamping_position_array.GetSize();
  {
    for(loopCounter16 = 0; loopCounter16 < Stamping_array_length;)
    {
      loopCounter16 = loopCounter16 + 1;
      ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
      if( 0 == Target_timer.SetTimer(Dwell_time) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Target_timer.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  if(0){
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
}

private function Washing( variable Stamping_repeat_washing, variable Dwell_time_washing, variable Drying_time ) void {
  private sequence washing_position_arr[];
  private sequence washing_rough_position_arr[];
  private variable loopCounter8;
  private variable Stamping_array_length;
  private variable loopCounter10;
  private variable loopCounter14;
  private variable loopCounter15;
  private variable Washing_array_length;
  private variable Washing_Rough_array_length;
  private timer Dry_timer;
  private timer Washing_timer;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  if (var_tool_up == 1)
  {
    if(0){
      washing_rough_position_arr.SetSize(0);
      washing_rough_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_96_Rough_Washing_1);
      washing_rough_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_96_Rough_Washing_2);
      Washing_Rough_array_length=washing_rough_position_arr.GetSize();
      dialogHandle_6.SetOutput(Translate("Length"), "\n", Stamping_array_length, "\n");
      dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      {
        for(loopCounter14 = 0; loopCounter14 < Washing_Rough_array_length;)
        {
          loopCounter14 = loopCounter14 + 1;
          {
            for(loopCounter15 = 0; loopCounter15 < Stamping_repeat_washing;)
            {
              loopCounter15 = loopCounter15 + 1;
              ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
              if( 0 == Washing_timer.SetTimer(Dwell_time_washing) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == Washing_timer.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
      }
    }
    washing_position_arr.SetSize(0);
    washing_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_Washing_3);
    washing_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_Washing_2);
    washing_position_arr.AddAsLast(ML_STAR.PPKE_PinTool_Washing_1);
    Washing_array_length=washing_position_arr.GetSize();
    if(0){
      dialogHandle_5.SetOutput(Translate("Length"), "\n", Stamping_array_length, "\n");
      dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    {
      for(loopCounter8 = 0; loopCounter8 < Washing_array_length;)
      {
        loopCounter8 = loopCounter8 + 1;
        {
          for(loopCounter10 = 0; loopCounter10 < Stamping_repeat_washing;)
          {
            loopCounter10 = loopCounter10 + 1;
            ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
            if( 0 == Washing_timer.SetTimer(Dwell_time_washing) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == Washing_timer.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
    }
    if(0){
      ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    }
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    if( 0 == Dry_timer.SetTimer(Drying_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == Dry_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
  else
  {
    dialogHandle_4.SetOutput(Translate("Pin tool has not been picked up!"));
    dialogHandle_4.ShowOutput(Translate("Error While Washing!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function HEPA_ON( variable HEPA_ON_fanpower ) void {
  private dialog dialogHandle_7;
  private dialog dialogHandle2;
  private variable HEPA_ON_fanpower_int;
  {
    	HxFan.SetComPort("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"); // SetComPort
  }
  {
    	HxFan.SetFanSpeed("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"); // SetFanSpeed
  }
  HEPA_ON_fanpower_int = MthCeiling(HEPA_ON_fanpower);
  if (HEPA_ON_fanpower_int == 1)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 2)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 3)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 4)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 5)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 6)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 7)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 8)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 9)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int == 10)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  if (HEPA_ON_fanpower_int <= 0)
  {
    dialogHandle2.SetOutput(Translate("Value smaller than 1! Value has to be between 1 - 10"), "\n");
    dialogHandle2.ShowOutput(Translate("Warning"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (HEPA_ON_fanpower_int > 10)
  {
    dialogHandle_7.SetOutput(Translate("Value greater than 10! Value has to be between 1 - 10...."), "\n");
    dialogHandle_7.ShowOutput(Translate("Warning"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function HEPA_OFF(  ) void {
  {
    	HxFan.SetFanOff("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"); // SetFanOff
  }
  {
    	HxFan.CloseComPort("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"); // CloseComPort
  }
}
